PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1512, 982]
  expName = Social Echo 
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instruction
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    TextComponent instr_text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        You will see a series of grating patterns.
        For each one, rate how strong or clear the pattern looks to you
        on a scale from 0 (very weak) to 100 (very strong).

        After your rating, you’ll see how other participants rated the same image.
        Then, you will re-rate the same image.

        Press SPACE to begin.
    KeyboardComponent instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InitialRating
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    ImageComponent stim_image
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
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    TextComponent rating_prompt
      letterHeight = 0.05
      startVal [time (s)] = 2.5
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      text:
        Rate how strong or visible the pattern looks.
        Move the slider, then press SPACE to continue.
    SliderComponent slider_initial
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ['0','50','100']
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0, 50, 100)
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine Feedback
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    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $'Other participants rated this image as ' + str(fake_feedback) + ' out of 100.'
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  Routine ReRating
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    ImageComponent stim_image2
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    TextComponent rating_prompt2
      letterHeight = 0.05
      startVal [time (s)] = 3.5
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      text:
        Please rate the same image again.
        Move the slider, then press SPACE.
    SliderComponent slider_final
      font = Noto Sans
      forceEndRoutine = True
      granularity = 1
      labels = ['0', '50', '100']
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0, 50, 100)
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine ITI
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    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.5
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    CodeComponent log_data
      Code Type = Auto->JS
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      Begin Routine:
        import random
        iti_dur = random.unifrom(0.3,0.8)
      End Routine:
        initial = slider_initial.getRating()
        final = slider_final.getRataing()
        change = final-initial


        thisExp.addData('stimulus', stimulus)
        thisExp.addData('feedback_type', feedback_type)
        thisExp.addData('fake_feedback', fake_feedback)
        thisExp.addData('initial_rating', initial)
        thisExp.addData('final_rating', final)
        thisExp.addData('rating_change', change)

        thisExp.nextEntry ()
  Routine Debrief
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    TextComponent debrief_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thank you for participating!

        In this study, the feedback you saw (“other participants’ ratings”) was simulated
        to study how group information can influence visual judgments.

        Press SPACE to end the experiment.
    KeyboardComponent key_debrief
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = SocialEcho_conditions.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'stimulus': 'images/grating_01.jpeg', 'feedback_type': 'neutral', 'fake_feedback': 50.0},
      {'stimulus': 'images/grating_02.jpeg', 'feedback_type': 'disagree', 'fake_feedback': 20.0},
      {'stimulus': 'images/grating_03.jpeg', 'feedback_type': 'agree', 'fake_feedback': 80.0},
      {'stimulus': 'images/grating_04.jpeg', 'feedback_type': 'agree', 'fake_feedback': 70.0},
      {'stimulus': 'images/grating_05.jpeg', 'feedback_type': 'disagree', 'fake_feedback': 10.0},
      {'stimulus': 'images/grating_06.jpeg', 'feedback_type': 'neutral', 'fake_feedback': 50.0},
      {'stimulus': 'images/grating_07.jpeg', 'feedback_type': 'neutral', 'fake_feedback': 65.0},
      {'stimulus': 'images/grating_08.jpeg', 'feedback_type': 'agree', 'fake_feedback': 70.0},
      {'stimulus': 'images/grating_09.jpeg', 'feedback_type': 'disagree', 'fake_feedback': 50.0},
      {'stimulus': 'images/grating_10.jpeg', 'feedback_type': 'agree', 'fake_feedback': 80.0}]
    Routine InitialRating
    Routine Feedback
    Routine ReRating
  LoopTerminator trials
  Routine Debrief
